//This file contains the parameter setting for rigid registration.
//Rigid registration is used as initialization method before B-Spline registration. 
//This parameters are mainly based on an existing parameter file, this parameter file can be found in: http://elastix.bigr.nl/wiki/images/e/e0/Par0001rigid.txt
//

//ImageTypes
(FixedInternalImagePixelType "float")
(MovingInternalImagePixelType "float")
(FixedImageDimension 3)
(MovingImageDimension 3)

//Components
(Registration "MultiResolutionRegistration")
(Interpolator "BSplineInterpolator")
(MaximumStepLength 1)
(Metric "AdvancedMattesMutualInformation")
(Optimizer "AdaptiveStochasticGradientDescent")
(ResampleInterpolator "FinalBSplineInterpolator")
(Resampler "DefaultResampler")
(Transform "EulerTransform")

(ErodeMask "false")

(AutomaticScalesEstimation "true")
(AutomaticTransformInitialization "true")

(NumberOfResolutions 2)

(HowToCombineTransforms "Compose")

(WriteResultImage "true")
(ResultImagePixelType "float")
(ResultImageFormat "mhd")


//Maximum number of iterations in each resolution level: 
(MaximumNumberOfIterations 500)


//Number of grey level bins in each resolution level:
(NumberOfHistogramBins 32)


//sampler:
(ImageSampler "Random")
(NewSamplesEveryIteration "true")


//Order of B-Spline interpolation used in each resolution level:
(BSplineInterpolationOrder 2)


//Order of B-Spline interpolation used for applying the final deformation:
(FinalBSplineInterpolationOrder 3)


//Default pixel value for pixels that come from outside picture:
(DefaultPixelValue 0)


(UseFastAndLowMemoryVersion "true")
(UseDirectionCosines "true")
